PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Units = pix
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  expName = quest
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    CodeComponent setIntensity
      Code Type = Auto->JS
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      Begin Routine:
        import  numpy as np
        targetSide= np.random.choice([-1,1])
        pos_1 = (-133*targetSide,-133)
        pos_3 = (133*targetSide,-133)
        #roundLevel = round(level,2)
        #print(roundLevel)
        #roundLevel = roundLevel if roundLevel <=1 else 1
        #roundLevel = roundLevel if roundLevel >=0 else 0
        #print(roundLevel)
        #image_1 = source+imgType+"0.png"
        #image_2 = source+imgType+"0.png"
        #print(arr.shape)
        #arr2 = arr.reshape((256,256,1))
        #arr3 = np.repeat(arr2,3,axis=2)
        image_1 = img256
        image_2 = img256
        with img3.clone() as tmpImg:
        #    img3 = img.clone()
        #with img3.clone() as tmpImg:
        #    tmpImg.type = "grayscale"
            tmpImg.swirl(degree=1.3*(10**(level*3)))
            tmpImg.resize(256,256)
            tmpImg.save(filename="spatial/tmp.png")
        #    arrTmp = np.array(tmpImg)/255.0

            image_3 = source+"tmp.png"
        #    arrTmp2  = arrTmp.reshape((256,256,1))
        #    image_3 = np.repeat(arrTmp,3,axis=2)


        #roundLevelImg = int(100*roundLevel)
        #print("-----after int----------")
        #print(roundLevel)
        #image_3 = source+imgType+str(roundLevelImg)+".png"


        if targetSide==1:
            CorrectAns='right'
        else:
            CorrectAns = 'left'

        #print(level)
    ImageComponent image1
      image [set every repeat] = $image_1
      interpolate = nearest
      pos [set every repeat] = pos_1
      size = (256,256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      units = pix
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image2
      image [set every repeat] = $image_2
      pos = (0, 133)
      size = (256,256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      units = pix
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    ImageComponent image3
      image [set every repeat] = $image_3
      pos [set every repeat] = pos_3
      size = (256,256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent updateLevel
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('level',level)
        thisExp.addData('targetSide',targetSide)
        thisExp.addData('CorrectAns', CorrectAns)
        #thisExp.addData('Response', key_resp.keys)


        if key_resp.keys == CorrectAns:
            #print('Answer correct!')
            thisExp.addData('correct', 1)
        #    staircase.currentStaircase.addResponse(key_resp.corr,intensity= roundLevel)
        else:
            thisExp.addData('correct', 0)
        #    staircase.currentStaircase.addResponse(key_resp.corr,intensity= roundLevel)
        thisExp.nextEntry()# add a new row to the output file
  Routine ty
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text:
        Thanks for participating!
        Press space key to end.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
  Routine type
    TextComponent image_type
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Type: ' + str(counter+1) + ' out of 18'+"\n"+snap+ "\nPress space key to start"
      units = height
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
        snap = ""
      Begin Routine:
        counter = (counter+1)%18
        snap = ""
        if counter==6 or counter==12:
            snap="Please take 1 minute break"
        imgPath = source +"512_" + imgType+ ".png"
        img256 = source + imgType+ ".png"
        arr = 0
        with Image(filename=imgPath) as img:
            img3 = img.clone()
  Routine block
    TextComponent block_loop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Press space key to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from wand.image import Image
        block = 1
        source = "spatial/"
        win.mouseVisible = False
      Begin Routine:
        block +=1
      End Experiment:
        win.mouseVisible = True
  Routine instr
    TextComponent text_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        You will be showed with a reference image on the top, and  a pair of images on the bottom.
        And you need to indicate the left or right image, which is different from the top one.
        You need to use left arrow key to indicate the left one is different and the right arrow key for the right.
        Press space key to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reversal
    CodeComponent code_3
      Code Type = Auto->JS
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      End Experiment:
        #filename="staircase.psydat"
        #thisExp.saveAsPickle(fileName)
      End Routine:
        index = 0
        for stair in staircase.staircases:
        #    filename = str(counter)+"_"+str(index)+"_stair.psydat"
            index += 1
            approxThreshold = stair.quantile(0.5)
            std = stair.sd()
            mn = stair.mean()
            thisExp.addData('approxThreshold', approxThreshold)
            thisExp.addData('std',std)
            thisExp.addData('mean',mn)
            thisExp.nextEntry()
        #    stair.saveAsPickle(filename)

        #thisExp.addData('threshold', staircase.quantile(0.5))
  Routine calThreshold
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        print(staircase_test.reversalIntensities)
        filename = str(counter)+"_stair.psydat"
        staircase_test.saveAsPickle(filename)
        #approxThreshold = int(2*np.average(staircase_test.reversalIntensities[-6:]))
        approxThreshold = np.average(staircase_test.reversalIntensities[-6:])
        if approxThreshold >50:
            approxThreshold = 50
        #thisExp.addData('approxThreshold', approxThreshold)
        #print('mean of final 6 reversals = %.3f' % (approxThreshold))
        print(approxThreshold)
  Routine closeInitalRule
    CodeComponent code_5
      Code Type = Auto->JS
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  Routine ajustment
    CodeComponent setIntensity_2
      Code Type = Auto->JS
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      Begin Routine:
        import numpy

        targetSide= np.random.choice([-1,1])
        pos_1 = (-133*targetSide,-133)
        pos_3 = (133*targetSide,-133)

        image_1 = source+imgType+"0.png"
        image_2 = source+imgType+"0.png"

        image_3 = source+imgType+str(imgNum)+".png"
      End Routine:
        if 'up' in key_resp_5.keys :
            imgNum = imgNum + 1 if imgNum < 50 else 50
        elif 'down' in key_resp_5.keys :
            imgNum = imgNum -1 if imgNum > 0 else 0
        elif 'space' in key_resp_5.keys:
            ajust1.finished = True
    TextComponent text_ajust
      letterHeight = 0.05
      pos = (0.7,0.7)
      startVal [time (s)] = 0.5
      units = height
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      text [set every repeat]:
        Press arrow up  key to increase the intensity, down key to decrease
        And press space key to indicate that you find they suddenly looks different or the same.
    ImageComponent imageA1
      image [set every repeat] = $image_1
      pos [set every frame] = pos_1
      size = (256, 256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent imageA2
      image [set every repeat] = $image_2
      pos = (0, 133)
      size = (256, 256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent imageA3
      image [set every repeat] = $image_3
      pos [set every frame] = pos_3
      size = (256, 256)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space','up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calib
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, visual, gui, data, event,logging
        from psychopy.tools.filetools import fromFile, toFile
        from psychopy.hardware import keyboard
        from numpy import matlib, inf, newaxis,zeros
        import numpy as np

        win = visual.Window(allowGUI=True, color=(0,0,0), allowStencil=True, monitor='testMonitor', winType='pyglet',units='pix',fullscr='bool')  #fullscr=True
        myMouse = event.Mouse()  #  will use win by default
        # and some handy clocks to keep track of time
        globalClock = core.Clock()
        kb = keyboard.Keyboard()
        core.rush(True, realtime=True)
        visual.useFBO = True  # if available (try without for comparison) Framebuffer
        disable_gc = True  # suspend the garbage collection
        process_priority = 'realtime'  # 'high' or 'realtime', 'normal'

        #Instruction and feedback text
        message1=visual.TextStim(win, pos=[0,250], text='Please adjust rectangle size to match credit card size by using four "arrow" keys, press "space" to continue', color=(-1.0, -1.0, -1.0))
        message2= visual.TextStim(win, pos=[0,200], text='cmperpixel ', color=(-1.0, -1.0, -1.0))
        message3= visual.TextStim(win, pos=[0,150], text='viewingdistance ', color=(-1.0, -1.0, -1.0))
        message4= visual.TextStim(win, pos=[0,100], text='viewingdistance ', color=(-1.0, -1.0, -1.0))

        message1.autoDraw='True'
        message2.autoDraw='True'
        message3.autoDraw='True'
        message4.autoDraw='True'


        # this is for "credit card calibration"
        stepsize=5 #pixels
        ang=1  #here I want 50pixels =1VA
        prepix=50
        physz=(8.56,5.398) #physcisal card size@cm
        card = visual.Rect(win=win, name='polygon', width=500, height=300,
            ori=0.0, pos=(0, 0), autoDraw='True',
            lineWidth=1,     colorSpace='rgb',  lineColor='white', fillColor='white',
            opacity=None, depth=0.0, interpolate=True, units='pix')



        # play credit card calibration
        ok=0
        while not ok:
            # Listen for keypresses until escape is pressed
            keys = kb.getKeys()
            if keys:
                if 'right' in keys:
                    card.width +=stepsize
                elif 'left' in keys:
                    card.width -=stepsize
                elif 'up' in keys:
                    card.height +=stepsize
                elif 'down' in keys:
                    card.height -=stepsize
                elif 'space' in keys:
                    ok=1
            adpix= [card.width,card.height]
            cmPpix=np.mean(np.divide(physz,adpix))
            resz=cmPpix*prepix
            dis=resz / (2*np.tan(np.pi*ang/360))
            message2.text = " each pixel is %3.3f mm " % (cmPpix*10)
            message3.text = " Please run formal experiment from distance: %3.0f cm" % (np.round(dis))
            win.flip()
        card.autoDraw=False
  Routine scale_set
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0


        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
  Routine screen_scale
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.05
      pos = (0, .6)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text:
        Resize this image to match the size of a credit card or same-size card
        Up arrow for taller, Down arrow for shorter
        Left arrow for narrower, Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine rectangle
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        ang=1;#here I want 50pixels =1VA
        prepix=50
        adpix = [x_scale,y_scale]
        cmPpix=np.mean(np.divide(1,adpix))
        resz=cmPpix*prepix
        dis=resz / (2*np.tan(np.pi*ang/360))
        text1 = " each pixel is {:.3f} mm ".format(cmPpix*10)
        text2 = " Please run formal experiment from distance: {:.0f} cm".format(np.round(dis))
    TextComponent rectangle_text
      letterHeight = 0.08
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text [set every repeat]:
        $'This shape should be a 10 cm square.\n'+text1+'\n'+text2+'\nPress space to continue.'
    PolygonComponent polygon_keys
      fillColor = $[1,1,1]
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stairInstr
    TextComponent text_stair
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your threshold is : ' + str(imgNum) +"\n"+"Press space key to start"
      units = height
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        startLow = True
        startHigh = True
  Routine ajustInstr
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Please use arrow UP key to increase the distortion intensity of image,
        and arrow DOWN key to decrease the distortion intensity.
        When you see the images are same, please increase it to make them different
        When yousee the images are  different, please decrease it to make them undistinguishble
        And when you find the lower two images suddenly become different  or same by your operation, please press 'sapce' key
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        imgNum = 35
    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setLevel
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        imgNum = imgNum-5 if imgNum >=5 else  0
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        You wil be shown images, they may look the same or different, please increase or decreae it to make them look the same if they look different,  or make them look different if they look the same.
        We want to find your change point, the threshold of noticable difference.

        Press space key to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set
Flow
  Routine instr
  Routine block
  LoopInitiator imageType loopType="TrialHandler"
    conditionsFile = imgType.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imgType': 'swirls/bark/'},
      {'imgType': 'swirls/bird/'},
      {'imgType': 'swirls/clock/'},
      {'imgType': 'swirls/flower/'},
      {'imgType': 'swirls/fruit/'},
      {'imgType': 'swirls/mountain/'},
      {'imgType': 'swirls/shadow/'},
      {'imgType': 'swirls/ubark/'},
      {'imgType': 'swirls/ubird/'},
      {'imgType': 'swirls/uclock/'},
      {'imgType': 'swirls/uflower/'},
      {'imgType': 'swirls/ufruit/'},
      {'imgType': 'swirls/umountain/'},
      {'imgType': 'swirls/ushadow/'}]
    Routine type
    LoopInitiator staircase loopType="MultiStairHandler"
      conditions = [{'label': 'solo', 'startVal': 0.5, 'startValSd': 0.5, 'pThreshold': 0.82, 'method': 'quantile', 'maxVal': 1, 'minVal': 0, 'range': 1, 'stopInterval': 0.2}]
      conditionsFile = condition.xlsx
      loopType = interleaved staircases
      nReps = 30
      stairType = QUEST
      switchMethod = random
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      Routine trial
    LoopTerminator staircase
    Routine reversal
  LoopTerminator imageType
  Routine ty
